database_name = /Users/jasminechi/Github/comp-bio-repro/crema/datasets/ecoli_msfragger_db.fasta
num_threads = 4
precursor_mass_lower = -20
precursor_mass_upper = 20
precursor_mass_units = 1
precursor_true_tolerance = 20
precursor_true_units = 1
fragment_mass_tolerance = 20
fragment_mass_units = 1
calibrate_mass = 0
decoy_prefix = rev_
output_format = pepxml
output_report_topN = 1
output_max_expect = 50
remove_precursor_peak = 1
intensity_transform = 0
search_enzyme_name_1 = Trypsin
search_enzyme_cut_1 = KR
search_enzyme_nocut_1 = P
num_enzyme_termini = 2
allowed_missed_cleavage_1 = 2
variable_mod_01 = 15.9949 M 3
variable_mod_02 = 42.0106 [^ 1
mass_diff_to_variable_mod = 0
max_variable_mods_per_peptide = 3
max_variable_mods_combinations = 5000
minimum_peaks = 15
use_topN_peaks = 150
min_fragments_modelling = 2
min_matched_fragments = 4
minimum_ratio = 0.01
clear_mz_range = 0.0 0.0
add_C_cysteine = 57.021464
